PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[0,0,0]
  colorSpace = hsv
  expName = strooptest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      letterHeight = .25
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down','up'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent numCorr
      Code Type = Py
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      Begin Experiment:
        numCorrect = 0
      End Routine:
        if response.corr:
            numCorrect += 1
  Routine instructions
    TextComponent instrText
      colorSpace = hsv
      letterHeight = 0.09
      startVal [time (s)] = 0
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      text:
        Welcome to the Stroop Task.

        For this task, choose the *color* of the words displayed on the screen, ignoring the words themselves.

        YOUR PERFORMANCE WILL BE EVALUATED, so answer as *quickly* and *accurately* as possible. The final results will be revealed at the end.

        COLORS:
        red -> left key
        blue -> right key
        green -> down key
        yellow -> up key

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent timer
      Code Type = Py
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      Before Experiment:
        import time
      End Routine:
        start = time.time()
    CodeComponent timerSound
      Code Type = Py
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      Before Experiment:
        from psychopy.sound import Sound
        mySound = sound.Sound('clock ticking.wav')
      End Routine:
        mySound.play()
    SerialOutComponent taskStart
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [condition] = len(key_resp.keys) > 0
      startdata = 1
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine end
    TextComponent endNotes
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $f"This concludes the Stroop Task.\n\nYour score is: {numCorrect} out of 48\nYour time is: {duration} seconds\n\nHow stressed were you during this task, on a scale of 1 to 5? Please use the slider below to indicate your response.\n\n\n\n"
    SliderComponent stressScore
      forceEndRoutine = True
      granularity = 1
      initVal = 1
      labels = 'not stressed at all','','','','extremely stressed'
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SerialOutComponent taskEnd
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine waiting
    TextComponent text_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        We'll begin in just a moment.


        Loading...
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    SerialOutComponent recordingStart
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine goodbye
    TextComponent text_4
      letterHeight = 0.15
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 3
      text = Thank you for participating in this study. Goodbye!
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    SerialOutComponent recordingEnd
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine recordTime
    CodeComponent recordTime_2
      Code Type = Py
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      Begin Routine:
        end = time.time()
        duration = str(round(end-start, 2))
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent timerTickingEnd
      Code Type = Py
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      Begin Routine:
        mySound.stop()
Flow
  Routine waiting
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'colour': 'red', 'word': 'RED', 'congruent': 1, 'corrAns': 'left'},
      {'colour': 'green', 'word': 'RED', 'congruent': 0, 'corrAns': 'down'},
      {'colour': 'yellow', 'word': 'RED', 'congruent': 0, 'corrAns': 'up'},
      {'colour': 'blue', 'word': 'RED', 'congruent': 0, 'corrAns': 'right'},
      {'colour': 'green', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'down'},
      {'colour': 'red', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'left'},
      {'colour': 'blue', 'word': 'BLUE', 'congruent': 1, 'corrAns': 'right'},
      {'colour': 'yellow', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'up'},
      {'colour': 'yellow', 'word': 'YELLOW', 'congruent': 1, 'corrAns': 'up'},
      {'colour': 'green', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'down'},
      {'colour': 'red', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'left'},
      {'colour': 'blue', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'right'},
      {'colour': 'yellow', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'up'},
      {'colour': 'blue', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'right'},
      {'colour': 'green', 'word': 'GREEN', 'congruent': 1, 'corrAns': 'down'},
      {'colour': 'red', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'left'}]
    Routine trial
  LoopTerminator trials
  Routine recordTime
  Routine end
  Routine goodbye
